PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = delerue_project
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    TextComponent text_2
      letterHeight = 0.05
      pos = (-0.05, 0)
      startVal [time (s)] = 0.0
      text = Remaining trials:
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        total_trials = 20
      Begin Routine:
        remaining_trials = total_trials - trials.thisN
    TextComponent text
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      text [set every frame] = $remaining_trials
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    SoundComponent sound1
      sound [set every repeat] = $audio1
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 2
      volume [set every repeat] = 1
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    SoundComponent sound2
      sound [set every repeat] = $audio2
      startVal [time (s)] = 3.1
      stopVal [duration (s)] = 2
      volume [set every repeat] = 1
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    KeyboardComponent key_resp
      allowedKeys = 's','d'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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  Routine goodbye
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    TextComponent goodbye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation!
        Please click on the link below to complete the submission and exit the experiment:
        https://app.prolific.com/submissions/complete?cc=CY7YO4JH
    MouseComponent mouse
      clickable = goodbye_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = JS
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      Each JS Frame:
        if (mouse.isPressedIn(goodbye_text)) {
            window.open('https://app.prolific.com/submissions/complete?cc=CY7YO4JH', '_blank');
            continueRoutine = false;
        }
  Routine instructions
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    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, you will hear two notes. Press 'S' if they are the same, or 'D' if they are different.
        Press 'SPACE' to continue.
    KeyboardComponent instructions_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine language
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    KeyboardComponent welcome_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        One more question!
        What is your native language(s)? Please type your answer below and press 'Enter' to continue.
  Routine welcome
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!
        Before starting, please type your Prolific ID below and press 'Enter' to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_2
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine musical_practice
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, do you have a musical practice?
        Press 'Y' for Yes, and 'N' for No.
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('musical_practice', key_resp_3.keys)
Flow
  Routine welcome
  Routine musical_practice
  Routine language
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'audio1': 'stimuli/A4.wav', 'audio2': 'stimuli/Bb4.wav', 'correct_response': 'different'},
      {'audio1': 'stimuli/D4.wav', 'audio2': 'stimuli/F4.wav', 'correct_response': 'different'},
      {'audio1': 'stimuli/F4.wav', 'audio2': 'stimuli/Db4.wav', 'correct_response': 'different'},
      {'audio1': 'stimuli/Eb4.wav', 'audio2': 'stimuli/Eb4.wav', 'correct_response': 'same'},
      {'audio1': 'stimuli/C5.wav', 'audio2': 'stimuli/Eb4.wav', 'correct_response': 'different'},
      {'audio1': 'stimuli/C4.wav', 'audio2': 'stimuli/F4.wav', 'correct_response': 'different'},
      {'audio1': 'stimuli/G4.wav', 'audio2': 'stimuli/G4.wav', 'correct_response': 'same'},
      {'audio1': 'stimuli/Bb4.wav', 'audio2': 'stimuli/Db4.wav', 'correct_response': 'different'},
      {'audio1': 'stimuli/Bb4.wav', 'audio2': 'stimuli/C5.wav', 'correct_response': 'different'},
      {'audio1': 'stimuli/B4.wav', 'audio2': 'stimuli/B4.wav', 'correct_response': 'same'},
      {'audio1': 'stimuli/Db4.wav', 'audio2': 'stimuli/Ab4.wav', 'correct_response': 'different'},
      {'audio1': 'stimuli/C4.wav', 'audio2': 'stimuli/Ab4.wav', 'correct_response': 'different'},
      {'audio1': 'stimuli/A4.wav', 'audio2': 'stimuli/D4.wav', 'correct_response': 'different'},
      {'audio1': 'stimuli/F4.wav', 'audio2': 'stimuli/G4.wav', 'correct_response': 'different'},
      {'audio1': 'stimuli/E4.wav', 'audio2': 'stimuli/B4.wav', 'correct_response': 'different'},
      {'audio1': 'stimuli/Eb4.wav', 'audio2': 'stimuli/Bb4.wav', 'correct_response': 'different'}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
    Routine trial
  LoopTerminator trials
  Routine goodbye
